CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "D.TIF")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "F.TIF")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "R.TIF")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigBlue
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:OrigBlue
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrBlue
    Name the primary objects to be identified:CorrNuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigBlue
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FF06
    Select objects to display:Nuclei
    Select outline color:#FB0280
    Select objects to display:CorrNuclei
