CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (extension does isimage) (file does contain ".npy")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain ".npy")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:_(?P<Plate>[0-9]{5})_
    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain ".npy")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_Illum
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain ".npy")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'IllumPh_golgi': 'Plate', 'IllumMito': 'Plate', 'OrigPh_golgi': 'Plate', 'IllumER': 'Plate', 'OrigHoechst': 'Plate', 'OrigER': 'Plate', 'IllumSyto': 'Plate', 'OrigSyto': 'Plate', 'OrigMito': 'Plate', 'IllumHoechst': 'Plate'}, {'IllumPh_golgi': None, 'IllumMito': None, 'OrigPh_golgi': 'Well', 'IllumER': None, 'OrigHoechst': 'Well', 'OrigER': 'Well', 'IllumSyto': None, 'OrigSyto': 'Well', 'OrigMito': 'Well', 'IllumHoechst': None}, {'IllumPh_golgi': None, 'IllumMito': None, 'OrigPh_golgi': 'Site', 'IllumER': None, 'OrigHoechst': 'Site', 'OrigER': 'Site', 'IllumSyto': None, 'OrigSyto': 'Site',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
    Image set matching method:Metadata
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigHoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigSyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigPh_golgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumMito")
    Name to assign these images:IllumMito
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumPh_golgi")
    Name to assign these images:IllumPh_golgi
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumSyto")
    Name to assign these images:IllumSyto
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumER")
    Name to assign these images:IllumER
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumHoechst")
    Name to assign these images:IllumHoechst
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:OrigPh_golgi
    Name the output image:Threshold_Otsu2
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Threshold:[module_num:6|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
    Select the input image:OrigPh_golgi
    Name the output image:Threshold_MCE
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
Threshold:[module_num:7|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
    Select the input image:OrigPh_golgi
    Name the output image:Threshold_Otsu3
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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