CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Mito")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cycle")
    Name to assign these images:Spots
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DNA")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:DNA
    Name the output image:CropDNA
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,400
    Top and bottom rectangle positions:0,400
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    Remove empty rows and columns?:All
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
Crop:[module_num:6|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
    Select the input image:Mito
    Name the output image:CropMito
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,400
    Top and bottom rectangle positions:0,400
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    Remove empty rows and columns?:All
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
Crop:[module_num:7|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
    Select the input image:Spots
    Name the output image:CropSpots
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:0,400
    Top and bottom rectangle positions:0,400
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    Remove empty rows and columns?:All
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CropDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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notes:['']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CropMito
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    Regularization factor:0.0005
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:CropSpots
    Name the primary objects to be identified:Spots
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
OverlayOutlines:[module_num:11|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notes:['For use in identifying foci touching cell edges']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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlineImage
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:CellOutlineImage
    Select objects to measure:Nuclei, Spots

FilterObjects:[module_num:13|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notes:['Remove foci that are touching the cell edge']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
    Select the objects to filter:Spots
    Name the output objects:Spots_NonCellEdge
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_CellOutlineImage
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:.5
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
FilterObjects:[module_num:14|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
    Select the objects to filter:Nuclei
    Name the output objects:Nuclei_NonCellEdge
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_CellOutlineImage
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:.5
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