CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "large")
    Name to assign these images:large_structures
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "DNA")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "half")
    Name to assign these images:half
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "spots")
    Name to assign these images:spots
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
DistanceTransform:[module_num:5|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notes:['Look at distance transforms in different starting images to develop some intuition.', 'Distance transforms convert foreground to the distance it is from background.']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
    Select the input image:half
    Name the output image:DistanceTransform_half
    Rescale values from 0 to 1?:No

DistanceTransform:[module_num:6|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notes:['Look at distance transforms in different starting images to develop some intuition.', 'Distance transforms convert foreground to the distance it is from background.', 'Can use this to ask within an object how far away is any given point from the background.']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
    Select the input image:large_structures
    Name the output image:DistanceTransform_large
    Rescale values from 0 to 1?:No

ImageMath:[module_num:7|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notes:['If you invert your image, you can ask a different question.', 'How far away from the object is any point in the image?']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:inverted_large
    Image or measurement?:Image
    Select the first image:large_structures
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
DistanceTransform:[module_num:8|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notes:['If you invert your image, you can ask a different question.', 'How far away from the object is any point in the image?']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
    Select the input image:inverted_large
    Name the output image:Inverted_large_distance
    Rescale values from 0 to 1?:No

ConvertImageToObjects:[module_num:9|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
    Select the input image:spots
    Name the output object:spots
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:10|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
    Select the input image:large_structures
    Name the output object:large_structures
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectIntensity:[module_num:11|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notes:['If you invert your image, you can ask a different question.', 'How far away from the object is any point in the image? You can measure the transform in other objects to get distances between them.']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
    Select images to measure:DistanceTransform_large, Inverted_large_distance
    Select objects to measure:spots

IdentifyPrimaryObjects:[module_num:12|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notes:['Here is a biological example where we stitched together images and wanted to know how far away the nuclei were from the edge of the stitched image']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
Threshold:[module_num:13|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notes:['Here is a biological example where we stitched together images and wanted to know how far away the nuclei were from the edge of the stitched image']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
    Select the input image:DNA
    Name the output image:NonPaddedArea
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.00001
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
DistanceTransform:[module_num:14|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notes:['Here is a biological example where we stitched together images and wanted to know how far away the nuclei were from the edge of the stitched image']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
    Select the input image:NonPaddedArea
    Name the output image:DistanceTransform
    Rescale values from 0 to 1?:No

MeasureObjectIntensity:[module_num:15|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notes:['Here is a biological example where we stitched together images and wanted to know how far away the nuclei were from the edge of the stitched image']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
    Select images to measure:DistanceTransform
    Select objects to measure:Nuclei
