CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c001")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c004")
    Name to assign these images:Cytoskel
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cytoskel
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RunCellpose:[module_num:7|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
    Select the input image:DNA
    Rescale images before running Cellpose:Yes
    Run CellPose in docker or local python environment:Docker
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:2.3.2
    Expected object diameter:15
    Detection mode:nuclei
    Name the output object:RunCellposeNuclei
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes
    Rescale probability map?:Yes

RunCellpose:[module_num:8|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
    Select the input image:Cytoskel
    Rescale images before running Cellpose:Yes
    Run CellPose in docker or local python environment:Docker
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:2.3.2
    Expected object diameter:30
    Detection mode:cyto
    Name the output object:RunCellposeCells
    Use GPU:No
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes
    Rescale probability map?:Yes
