CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c004")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c001")
    Name to assign these images:SpotType1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c002")
    Name to assign these images:SpotType2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c003")
    Name to assign these images:SpotType3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c005")
    Name to assign these images:SpotType4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:PseudoCells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
    Number of pixels by which to expand the primary objects:40
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:SpotType1
    Name the output image:EnhSpeckles1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:SpotType2
    Name the output image:EnhSpeckles2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:SpotType3
    Name the output image:EnhSpeckles3
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:SpotType4
    Name the output image:EnhSpeckles4
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:EnhSpeckles3
    Name the primary objects to be identified:SpecklesCh3
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:10.0
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
RelateObjects:[module_num:12|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
    Parent objects:PseudoCells
    Child objects:SpecklesCh3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:13|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
    Select the objects to filter:PseudoCells
    Name the output objects:CellsWithLotsOfSpeckles
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_SpecklesCh3_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:10.0
    Filter using a maximum measurement value?:No
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
GrayToColor:[module_num:14|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enabled:False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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorImage
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    Hidden:5
    Image name:DNA
    Color:#21FFFF
    Weight:1.0
    Image name:SpotType1
    Color:#00ff00
    Weight:1.0
    Image name:SpotType2
    Color:#FFFFFF
    Weight:1.0
    Image name:SpotType3
    Color:#FB02FF
    Weight:1.0
    Image name:SpotType4
    Color:#FFFF0A
    Weight:1.0
